

// --- Configuration ---
jythonScriptPath = "Z:\\Nic\\Human Work\\HBSP Delineations\\fiji_macros\\check_rois_in_zip_func.py"; 
subDir_names = "adjusted"; // options are: "regist" or "adjusted"
zip_searchString = "";
png_searchString = "HELL NO";
overlayTIFFs = true;
saving_prefix = "RoiOverlay_";                    
strokeColor = "cyan";
flattened_im_downsample = 0.2;
lineWidth = 5;
setBatchMode(true); 
var channelCombination, tif_searchStrings, min_BC, max_BC;

function findChannelCombination(name) {
	if (name == "PSD95_PSD93_GLUN1") {
		channelCombination = "PSD95-PSD93";
	    tif_searchStrings = newArray("_cy5", "_af546");
		min_BC = newArray(93.96551724, 96.73333333);
	    max_BC = newArray(326.5862069, 216.6333333);
	}
	else if (name == "PSD95_GLUA2_GLUN1") { 
		channelCombination = "PSD95-GLUA2";
	    tif_searchStrings = newArray("_cy5", "_af555");
		min_BC = newArray(98.26666667, 92.4); 
	    max_BC = newArray(270.5, 276.0333333);
	}
	else if (name == "GEPH") { 
		channelCombination = "GEPH";
	    tif_searchStrings = newArray("_cy5");
		min_BC = newArray(92.33333333,0); 
	    max_BC = newArray(190.0333333,0);
	}
	else if (name == "GLUN1_GLUA2") { 
		channelCombination = "GLUN1-GLUA2";
	    tif_searchStrings = newArray("_cy5", "_af546");
		min_BC = newArray(92.96666667, 89.6); 
	    max_BC = newArray(261.9, 353.6);
	}
	else if (name == "VGLUT_VGAT") { 
		channelCombination = "VGLUT-VGAT";
	    tif_searchStrings = newArray("_568", "_cy5");
		min_BC = newArray(90.66666667, 106.6666667); 
	    max_BC = newArray(353.4, 590.9333333);
	}
	else {print("❌ Unidentified channel combination " + name);}
}



// --- Main ---
 
macro "Overlay ROIs" {
	pooledBrainDir = getString("Enter pooled brain directory:", "");
	if (!endsWith(pooledBrainDir, "\\")) {pooledBrainDir = pooledBrainDir + "\\";}
	pooledBrainDirFiles = getFileList(pooledBrainDir);
	for (i = 0; i < pooledBrainDirFiles.length; i++) {
		baseDir = pooledBrainDir + pooledBrainDirFiles[i];
	    if (File.isDirectory(baseDir)) {
			close("*");
			print("\\Clear");
	    	
	    	baseDirFiles = getFileList(baseDir);
    		if (baseDirFiles.length == 0) {
    			print("❌ Base directory is empty " + baseDir);
    			continue;
    		}
	    	
	    	if (overlayTIFFs) {findChannelCombination(replace(pooledBrainDirFiles[i], "/", ""));}
			else { // Dummy values to prevent overlaying ROIs on TIFFs
			    tif_searchStrings = newArray("HELL NO");
			    min_BC = newArray(0);
			    max_BC = newArray(0);
			}
			
			print("--- Base Directory: " + File.getName(baseDir) + " ---");
	    	processDirectory(baseDir);
	    	print("\n🎉 Overlaying and Saving Complete: " + baseDir);
	    	
		    logContent = getInfo("log");
		    logFilePath = baseDir + "Overlay_Log(most-recent).txt";
		    File.saveString(logContent, logFilePath);
	    }
	}
}

// --- Process Directory Func ---
function processDirectory(dir) { 
	folders = getFileList(dir);
	for (i = 0; i < folders.length; i++) {
	    if (File.isDirectory(dir + folders[i])) {
	        folderPath_1 = dir + folders[i];
	        files_1 = getFileList(folderPath_1);
	        print("\nProcessing folder: " + folderPath_1);
	        
	        // --- Get tif (montage) file paths ---
	        tifFilePathList = newArray(tif_searchStrings.length);
	        for (k = 0; k < tif_searchStrings.length; k++) {
	        	current_tif_searchString = tif_searchStrings[k];
		        for (j = 0; j < files_1.length; j++) {
		            if (endsWith(files_1[j], ".tif") && indexOf(toLowerCase(files_1[j]), current_tif_searchString) >= 0)
		                tifFilePathList[k] = folderPath_1 + files_1[j];
		        }
	        }
	        
	        // --- Loop over sub directories ---
	        if (subDir_names == "regist") {subDirs = newArray("old_regist", "new_regist");} 
			else if (subDir_names == "adjusted") {subDirs = newArray("adjusted");} 
			else {
			    print("❌ Unrecognized subDir_names string, stopping script");
			    break;
			}
	        
			for (k = 0; k < subDirs.length; k++) {
				subDir = subDirs[k];
		        
		        // --- Get png (Nissl) and zip (RoiSet) file paths ---
		        pngFilePath = newArray(0);
		        zipFilePath = "";
		        folderPath_2 = folderPath_1 + subDir + File.separator;
		        files_2 = getFileList(folderPath_2);
		        for (j = 0; j < files_2.length; j++) {
		            if (endsWith(files_2[j], ".png") && indexOf(files_2[j], png_searchString) >= 0) 
		            	pngFilePath = Array.concat(pngFilePath, folderPath_2 + files_2[j]);
		            if (endsWith(files_2[j], ".zip") && indexOf(files_2[j], zip_searchString) >= 0) 
		            	zipFilePath = folderPath_2 + files_2[j];
		        }
		        
		        if (zipFilePath == "") {
		            print("❌ Missing ROI zip file in " + folderPath_2);
		            continue;
		        }

		        // --- Load ROIs and set properties ---
				cleanZipPath = replace(zipFilePath, "\\", "/");
				runMacro(jythonScriptPath, cleanZipPath);
				countFilePath = File.getParent(zipFilePath) + "\\roi_count.txt";
				roiCountStr = String.trim(File.openAsString(countFilePath));

		        if (roiCountStr == "0") {
		        	print("❌ No ROIs in zip file " + zipFilePath);
		        	continue;
		        }
		        else if (roiCountStr == "ERROR") {
		        	print("❌ Could not read zip file " + zipFilePath);
		        	continue;
		        }
				else {
					roiManager("reset");
			        roiManager("Open", zipFilePath);
	                roiManager("Select All");
	                roiManager("Set Color", strokeColor);
	                roiManager("Set Line Width", lineWidth);
		        }
		
		        // --- Process both PNG and TIF images ---
		        if (tif_searchStrings[0] == "HELL NO") {print("✱ Not wanting to overlay TIFF file in " + folderPath_1);}
		        else if (tifFilePathList.length != tif_searchStrings.length) {print("❌ Incorrect number of TIFF files in " + folderPath_1);}
		        else {processImage(tifFilePathList, zipFilePath, saving_prefix);}
		        
		        if (png_searchString == "HELL NO") {print("✱ Not wanting to overlay PNG file in " + folderPath_2);}
		        else if (pngFilePath.length == 0) {print("❌ Missing PNG file in " + folderPath_2);}
		        else {processImage(pngFilePath, zipFilePath, saving_prefix);}
		        
		        roiManager("reset");
	    	}
	    }
	}
}

// --- Process Image Func (dynamically creates composite for number of channels) ---
function processImage(imgPathList, RoiSetPath, prefix) {
	mergeCommand = "";
	for (k = 0; k < imgPathList.length; k++) {
		open(imgPathList[k]);
		if (endsWith(imgPathList[k], ".tif")) {
			setMinAndMax(min_BC[k], max_BC[k]);
			wait(1000);
			mergeCommand += " c" + (k + 1) + "=[" + getTitle() + "]";
		}
	}
	if (endsWith(imgPathList[0], ".png")) {name = File.getName(imgPathList[0]);} 
	else {
		mergeCommand += " create ignore";
    	run("Merge Channels...", mergeCommand);
    	close("\\Others");
		parentFolder = File.getName(File.getParent(RoiSetPath));
		grandParentFolder = File.getName(File.getParent(File.getParent(RoiSetPath)));
		name = "Composite_" + channelCombination + grandParentFolder + parentFolder;
	}
    roiManager("Show All");
    wait(500);
    run("Flatten");
    wait(500);
    run("Scale...", "x=" + flattened_im_downsample + " y=" + flattened_im_downsample + " interpolation=Bilinear create");
    savePath = File.getParent(RoiSetPath) + File.separator + prefix + name;
    saveAs("PNG", savePath);
    close("*");
    print("✅ Overlay saved to: " + savePath);
}

